WorkflowBuilder(Version=2.3.0)
NestedWorkflow "Experiment name"
    ExternalizedPropertyOfStringStringProperty Value(MemberName=Value, Value="C:\Users\Axioplan\OneDrive - University College London\Zwp\Behaviour\New Startle Response\Expt9 5dpf ZX1\3hrs_post_ppi")
    -> StringProperty(Value="C:\Users\Axioplan\OneDrive - University College London\Zwp\Behaviour\New Startle Response\Expt9 5dpf ZX1\3hrs_post_darkflash")
    -> WorkflowOutput
-> ReplaySubject Prefix(BufferSize=nil)

SubscribeSubject "Trigger Signal"
-> NestedWorkflow "Hardware controls"
    NestedWorkflow "F10 sound test" => #1
        Bonsai.Windows.Input.KeyDown(Filter=F10)
        -> StringProperty(Value="S4,10")
        -> WorkflowOutput
    NestedWorkflow "F7 flash test" => #2
        Bonsai.Windows.Input.KeyDown(Filter=F7)
        -> StringProperty(Value="F0,1000")
        -> WorkflowOutput
    NestedWorkflow "F8 lights on" => #3
        Bonsai.Windows.Input.KeyDown(Filter=F8)
        -> StringProperty(Value=on)
        -> WorkflowOutput
    NestedWorkflow "F9 lights off" => #4
        Bonsai.Windows.Input.KeyDown(Filter=F9)
        -> StringProperty(Value=off)
        -> WorkflowOutput
    WorkflowInput Source1
    -> Delay(DueTime=PT0.1S) => #5
    #1, #2, #3, #4, #5 -> Merge
    -> WorkflowOutput
-> Bonsai.IO.SerialStringWrite(PortName=COM7, NewLine=\n)

NestedWorkflow "Collect frames" => #12
    SubscribeSubject VideoData => #1
    SubscribeSubject "Trigger Signal" => #2
    ExternalizedPropertyOfNullableOfInt32TriggeredWindow "Record length"(MemberName=Count, Value=250) => #3
    #1, #2, #3 -> TriggeredBuffer(Count=250)
    -> WorkflowOutput
-> SelectMany "Process Frames" => #15
    WorkflowInput Source1
    -> Concat
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=0.5, ThresholdValue=9, ThresholdType=Binary, SubtractionMethod=Absolute) => #4
    -> NestedWorkflow "96 well" => #18
        WorkflowInput Source1
        -> Bonsai.Vision.RoiActivity
          Regions
            ArrayOfPoint(Point(X=824, Y=5), Point(X=1106, Y=5), Point(X=1106, Y=40), Point(X=824, Y=40))
            ArrayOfPoint(Point(X=116, Y=111), Point(X=192, Y=111), Point(X=192, Y=182), Point(X=116, Y=182))
            ArrayOfPoint(Point(X=194, Y=113), Point(X=270, Y=113), Point(X=270, Y=184), Point(X=194, Y=184))
            ArrayOfPoint(Point(X=271, Y=112), Point(X=347, Y=112), Point(X=347, Y=183), Point(X=271, Y=183))
            ArrayOfPoint(Point(X=348, Y=112), Point(X=424, Y=112), Point(X=424, Y=183), Point(X=348, Y=183))
            ArrayOfPoint(Point(X=425, Y=113), Point(X=501, Y=113), Point(X=501, Y=184), Point(X=425, Y=184))
            ArrayOfPoint(Point(X=502, Y=114), Point(X=578, Y=114), Point(X=578, Y=185), Point(X=502, Y=185))
            ArrayOfPoint(Point(X=579, Y=114), Point(X=651, Y=114), Point(X=651, Y=185), Point(X=579, Y=185))
            ArrayOfPoint(Point(X=652, Y=113), Point(X=724, Y=113), Point(X=724, Y=184), Point(X=652, Y=184))
            ArrayOfPoint(Point(X=730, Y=114), Point(X=802, Y=114), Point(X=802, Y=185), Point(X=730, Y=185))
            ArrayOfPoint(Point(X=804, Y=115), Point(X=876, Y=115), Point(X=876, Y=186), Point(X=804, Y=186))
            ArrayOfPoint(Point(X=879, Y=115), Point(X=951, Y=115), Point(X=951, Y=186), Point(X=879, Y=186))
            ArrayOfPoint(Point(X=954, Y=114), Point(X=1026, Y=114), Point(X=1026, Y=185), Point(X=954, Y=185))
            ArrayOfPoint(Point(X=119, Y=188), Point(X=191, Y=188), Point(X=191, Y=259), Point(X=119, Y=259))
            ArrayOfPoint(Point(X=196, Y=188), Point(X=268, Y=188), Point(X=268, Y=259), Point(X=196, Y=259))
            ArrayOfPoint(Point(X=273, Y=188), Point(X=345, Y=188), Point(X=345, Y=259), Point(X=273, Y=259))
            ArrayOfPoint(Point(X=350, Y=188), Point(X=422, Y=188), Point(X=422, Y=259), Point(X=350, Y=259))
            ArrayOfPoint(Point(X=426, Y=188), Point(X=498, Y=188), Point(X=498, Y=259), Point(X=426, Y=259))
            ArrayOfPoint(Point(X=502, Y=189), Point(X=574, Y=189), Point(X=574, Y=260), Point(X=502, Y=260))
            ArrayOfPoint(Point(X=578, Y=189), Point(X=650, Y=189), Point(X=650, Y=260), Point(X=578, Y=260))
            ArrayOfPoint(Point(X=654, Y=188), Point(X=726, Y=188), Point(X=726, Y=259), Point(X=654, Y=259))
            ArrayOfPoint(Point(X=729, Y=188), Point(X=801, Y=188), Point(X=801, Y=259), Point(X=729, Y=259))
            ArrayOfPoint(Point(X=805, Y=189), Point(X=877, Y=189), Point(X=877, Y=260), Point(X=805, Y=260))
            ArrayOfPoint(Point(X=880, Y=189), Point(X=952, Y=189), Point(X=952, Y=260), Point(X=880, Y=260))
            ArrayOfPoint(Point(X=955, Y=188), Point(X=1027, Y=188), Point(X=1027, Y=259), Point(X=955, Y=259))
            ArrayOfPoint(Point(X=120, Y=262), Point(X=192, Y=262), Point(X=192, Y=333), Point(X=120, Y=333))
            ArrayOfPoint(Point(X=197, Y=261), Point(X=269, Y=261), Point(X=269, Y=332), Point(X=197, Y=332))
            ArrayOfPoint(Point(X=273, Y=264), Point(X=345, Y=264), Point(X=345, Y=335), Point(X=273, Y=335))
            ArrayOfPoint(Point(X=350, Y=264), Point(X=422, Y=264), Point(X=422, Y=335), Point(X=350, Y=335))
            ArrayOfPoint(Point(X=426, Y=263), Point(X=498, Y=263), Point(X=498, Y=334), Point(X=426, Y=334))
            ArrayOfPoint(Point(X=501, Y=264), Point(X=573, Y=264), Point(X=573, Y=335), Point(X=501, Y=335))
            ArrayOfPoint(Point(X=576, Y=264), Point(X=648, Y=264), Point(X=648, Y=335), Point(X=576, Y=335))
            ArrayOfPoint(Point(X=652, Y=263), Point(X=724, Y=263), Point(X=724, Y=334), Point(X=652, Y=334))
            ArrayOfPoint(Point(X=728, Y=264), Point(X=800, Y=264), Point(X=800, Y=335), Point(X=728, Y=335))
            ArrayOfPoint(Point(X=804, Y=264), Point(X=876, Y=264), Point(X=876, Y=335), Point(X=804, Y=335))
            ArrayOfPoint(Point(X=881, Y=264), Point(X=953, Y=264), Point(X=953, Y=335), Point(X=881, Y=335))
            ArrayOfPoint(Point(X=957, Y=264), Point(X=1029, Y=264), Point(X=1029, Y=335), Point(X=957, Y=335))
            ArrayOfPoint(Point(X=119, Y=339), Point(X=191, Y=339), Point(X=191, Y=410), Point(X=119, Y=410))
            ArrayOfPoint(Point(X=198, Y=337), Point(X=270, Y=337), Point(X=270, Y=408), Point(X=198, Y=408))
            ArrayOfPoint(Point(X=274, Y=337), Point(X=346, Y=337), Point(X=346, Y=408), Point(X=274, Y=408))
            ArrayOfPoint(Point(X=349, Y=337), Point(X=421, Y=337), Point(X=421, Y=408), Point(X=349, Y=408))
            ArrayOfPoint(Point(X=426, Y=337), Point(X=498, Y=337), Point(X=498, Y=408), Point(X=426, Y=408))
            ArrayOfPoint(Point(X=501, Y=339), Point(X=573, Y=339), Point(X=573, Y=410), Point(X=501, Y=410))
            ArrayOfPoint(Point(X=576, Y=338), Point(X=648, Y=338), Point(X=648, Y=409), Point(X=576, Y=409))
            ArrayOfPoint(Point(X=651, Y=338), Point(X=723, Y=338), Point(X=723, Y=409), Point(X=651, Y=409))
            ArrayOfPoint(Point(X=729, Y=338), Point(X=801, Y=338), Point(X=801, Y=409), Point(X=729, Y=409))
            ArrayOfPoint(Point(X=804, Y=339), Point(X=876, Y=339), Point(X=876, Y=410), Point(X=804, Y=410))
            ArrayOfPoint(Point(X=881, Y=339), Point(X=953, Y=339), Point(X=953, Y=410), Point(X=881, Y=410))
            ArrayOfPoint(Point(X=957, Y=338), Point(X=1029, Y=338), Point(X=1029, Y=409), Point(X=957, Y=409))
            ArrayOfPoint(Point(X=119, Y=415), Point(X=191, Y=415), Point(X=191, Y=486), Point(X=119, Y=486))
            ArrayOfPoint(Point(X=198, Y=414), Point(X=270, Y=414), Point(X=270, Y=485), Point(X=198, Y=485))
            ArrayOfPoint(Point(X=273, Y=413), Point(X=345, Y=413), Point(X=345, Y=484), Point(X=273, Y=484))
            ArrayOfPoint(Point(X=348, Y=412), Point(X=420, Y=412), Point(X=420, Y=483), Point(X=348, Y=483))
            ArrayOfPoint(Point(X=424, Y=414), Point(X=496, Y=414), Point(X=496, Y=485), Point(X=424, Y=485))
            ArrayOfPoint(Point(X=499, Y=414), Point(X=571, Y=414), Point(X=571, Y=485), Point(X=499, Y=485))
            ArrayOfPoint(Point(X=577, Y=414), Point(X=649, Y=414), Point(X=649, Y=485), Point(X=577, Y=485))
            ArrayOfPoint(Point(X=651, Y=412), Point(X=723, Y=412), Point(X=723, Y=483), Point(X=651, Y=483))
            ArrayOfPoint(Point(X=728, Y=413), Point(X=800, Y=413), Point(X=800, Y=484), Point(X=728, Y=484))
            ArrayOfPoint(Point(X=802, Y=414), Point(X=874, Y=414), Point(X=874, Y=485), Point(X=802, Y=485))
            ArrayOfPoint(Point(X=879, Y=414), Point(X=951, Y=414), Point(X=951, Y=485), Point(X=879, Y=485))
            ArrayOfPoint(Point(X=955, Y=414), Point(X=1027, Y=414), Point(X=1027, Y=485), Point(X=955, Y=485))
            ArrayOfPoint(Point(X=118, Y=492), Point(X=190, Y=492), Point(X=190, Y=563), Point(X=118, Y=563))
            ArrayOfPoint(Point(X=197, Y=491), Point(X=269, Y=491), Point(X=269, Y=562), Point(X=197, Y=562))
            ArrayOfPoint(Point(X=271, Y=490), Point(X=343, Y=490), Point(X=343, Y=561), Point(X=271, Y=561))
            ArrayOfPoint(Point(X=349, Y=492), Point(X=421, Y=492), Point(X=421, Y=563), Point(X=349, Y=563))
            ArrayOfPoint(Point(X=425, Y=492), Point(X=497, Y=492), Point(X=497, Y=563), Point(X=425, Y=563))
            ArrayOfPoint(Point(X=501, Y=492), Point(X=573, Y=492), Point(X=573, Y=563), Point(X=501, Y=563))
            ArrayOfPoint(Point(X=576, Y=491), Point(X=648, Y=491), Point(X=648, Y=562), Point(X=576, Y=562))
            ArrayOfPoint(Point(X=650, Y=490), Point(X=722, Y=490), Point(X=722, Y=561), Point(X=650, Y=561))
            ArrayOfPoint(Point(X=728, Y=491), Point(X=800, Y=491), Point(X=800, Y=562), Point(X=728, Y=562))
            ArrayOfPoint(Point(X=802, Y=492), Point(X=874, Y=492), Point(X=874, Y=563), Point(X=802, Y=563))
            ArrayOfPoint(Point(X=879, Y=491), Point(X=951, Y=491), Point(X=951, Y=562), Point(X=879, Y=562))
            ArrayOfPoint(Point(X=956, Y=490), Point(X=1028, Y=490), Point(X=1028, Y=561), Point(X=956, Y=561))
            ArrayOfPoint(Point(X=118, Y=571), Point(X=190, Y=571), Point(X=190, Y=642), Point(X=118, Y=642))
            ArrayOfPoint(Point(X=195, Y=569), Point(X=267, Y=569), Point(X=267, Y=640), Point(X=195, Y=640))
            ArrayOfPoint(Point(X=272, Y=569), Point(X=344, Y=569), Point(X=344, Y=640), Point(X=272, Y=640))
            ArrayOfPoint(Point(X=348, Y=570), Point(X=420, Y=570), Point(X=420, Y=641), Point(X=348, Y=641))
            ArrayOfPoint(Point(X=425, Y=568), Point(X=497, Y=568), Point(X=497, Y=639), Point(X=425, Y=639))
            ArrayOfPoint(Point(X=501, Y=568), Point(X=573, Y=568), Point(X=573, Y=639), Point(X=501, Y=639))
            ArrayOfPoint(Point(X=578, Y=568), Point(X=650, Y=568), Point(X=650, Y=639), Point(X=578, Y=639))
            ArrayOfPoint(Point(X=652, Y=567), Point(X=724, Y=567), Point(X=724, Y=638), Point(X=652, Y=638))
            ArrayOfPoint(Point(X=728, Y=568), Point(X=800, Y=568), Point(X=800, Y=639), Point(X=728, Y=639))
            ArrayOfPoint(Point(X=803, Y=568), Point(X=875, Y=568), Point(X=875, Y=639), Point(X=803, Y=639))
            ArrayOfPoint(Point(X=879, Y=568), Point(X=951, Y=568), Point(X=951, Y=639), Point(X=879, Y=639))
            ArrayOfPoint(Point(X=955, Y=568), Point(X=1027, Y=568), Point(X=1027, Y=639), Point(X=955, Y=639))
            ArrayOfPoint(Point(X=120, Y=646), Point(X=192, Y=646), Point(X=192, Y=717), Point(X=120, Y=717))
            ArrayOfPoint(Point(X=196, Y=647), Point(X=268, Y=647), Point(X=268, Y=718), Point(X=196, Y=718))
            ArrayOfPoint(Point(X=272, Y=647), Point(X=344, Y=647), Point(X=344, Y=718), Point(X=272, Y=718))
            ArrayOfPoint(Point(X=348, Y=647), Point(X=420, Y=647), Point(X=420, Y=718), Point(X=348, Y=718))
            ArrayOfPoint(Point(X=425, Y=646), Point(X=497, Y=646), Point(X=497, Y=717), Point(X=425, Y=717))
            ArrayOfPoint(Point(X=500, Y=647), Point(X=572, Y=647), Point(X=572, Y=718), Point(X=500, Y=718))
            ArrayOfPoint(Point(X=576, Y=645), Point(X=648, Y=645), Point(X=648, Y=716), Point(X=576, Y=716))
            ArrayOfPoint(Point(X=653, Y=644), Point(X=725, Y=644), Point(X=725, Y=715), Point(X=653, Y=715))
            ArrayOfPoint(Point(X=729, Y=645), Point(X=801, Y=645), Point(X=801, Y=716), Point(X=729, Y=716))
            ArrayOfPoint(Point(X=805, Y=645), Point(X=877, Y=645), Point(X=877, Y=716), Point(X=805, Y=716))
            ArrayOfPoint(Point(X=879, Y=644), Point(X=951, Y=644), Point(X=951, Y=715), Point(X=879, Y=715))
            ArrayOfPoint(Point(X=956, Y=645), Point(X=1028, Y=645), Point(X=1028, Y=716), Point(X=956, Y=716))
        -> WorkflowOutput
    #18, #4 -> Zip
    -> SelectMany "Find Objects" => #9
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Source.Item2) => #1
        #0 -> MemberSelector(Selector=Source.Item1)
        -> Concat => #3
        #1, #3 -> CombineLatest
        -> InputMapping(Selector=Source.Item1, RegionOfInterest(selector=Source.Item2.Rect))
        -> Bonsai.Vision.Crop(RegionOfInterest(X=956, Y=645, Width=73, Height=72))
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=5, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> ToList
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform "Centroids String"
      Script:
        @returns(str)
        def process(value):
          coords = [str(fish.Centroid.X)+" "+str(fish.Centroid.Y) if fish.Area>0 else "0 0" for fish in value]
          return " ".join(coords)
    -> ToList => #13
    #9 -> Bonsai.Scripting.PythonSelectMany "Get Areas" => #7
      Script:
        @returns(float)
        def process(value):
          for fish in value:
            yield fish.Area
    #18 -> Bonsai.Scripting.PythonTransform "Deltapixels string"
      Script:
        @returns(str)
        def process(value):
          return " ".join(str(int(item.Activity.Val0)) for item in value)
    -> ToList => #17
    #18 -> MemberSelector(Selector=Source.Count)
    -> ReplaySubject NumROIs(BufferSize=nil)
    SubscribeSubject NumROIs
    -> ExternalizedPropertyOfInt32Buffer Count(MemberName=Count, Value=13) => #3
    #7, #3 -> Bonsai.Dsp.Buffer(Count=97, Skip=nil)
    -> ToList => #12
    #12, #13, #17 -> Zip
    -> WorkflowOutput
-> NestedWorkflow "Write deltapixels"
    WorkflowInput Source1
    -> MemberSelector(Selector=Source.Item3)
    -> Concat => #6
    SubscribeSubject Prefix
    -> Add(Operand=StringProperty(Value=_deltapixels_.csv))
    -> ExternalizedPropertyOfStringTextWriter "Deltapixels FileName"(MemberName=FileName, Value="E:\6. Myrf 5dpf 12 well plate sound titration\myrf_5dpf_12wellplate_soundtitration_medscrew_10repeats.csv") => #7
    #6, #7 -> Bonsai.IO.TextWriter
      FileName="C:\Users\Axioplan\OneDrive - University College London\Zwp\Behaviour\New Startle Response\Expt9 5dpf ZX1\3hrs_post_darkflash_deltapixels_.csv"
      Suffix=FileCount
      Buffered=true
      Overwrite=false
      Append=false
    -> WorkflowOutput
#15 -> NestedWorkflow "Write centroids"
    SubscribeSubject Prefix
    -> Add(Operand=StringProperty(Value=_centroids_.csv))
    -> ExternalizedPropertyOfStringTextWriter "Centroids FileName"(MemberName=FileName, Value="E:\6. Myrf 5dpf 12 well plate sound titration\myrf_5dpf_12wellplate_soundtitration_medscrew_10repeats.csv") => #2
    WorkflowInput Source1
    -> MemberSelector(Selector=Source.Item2)
    -> Concat => #1
    #1, #2 -> Bonsai.IO.TextWriter
      FileName="C:\Users\Axioplan\OneDrive - University College London\Zwp\Behaviour\New Startle Response\Expt9 5dpf ZX1\3hrs_post_darkflash_centroids_.csv"
      Suffix=FileCount
      Buffered=true
      Overwrite=false
      Append=false
    -> WorkflowOutput
#15 -> NestedWorkflow "Movement charts"
    WorkflowInput Source1
    -> MemberSelector(Selector=Source.Item1)
    -> Bonsai.Dsp.Concat(Axis=0)
    -> Bonsai.Dsp.Transpose
    -> WorkflowOutput
-> NestedWorkflow "Response Summary"
    WorkflowInput Source1
    -> Bonsai.Dsp.Reduce(Axis=1, Operation=Max)
    -> Bonsai.Dsp.CountNonZero => #0
    SubscribeSubject "Trigger Signal" => #5
    #0, #5 -> CombineLatest => #4
    #4, #0 -> Sample
    -> Bonsai.Scripting.PythonTransform Summary
      Script:
        @returns(str)
        def process(value):
          return value.Item2 + "\t" + str(value.Item1)
    -> Index
    -> WorkflowOutput
#12 -> NestedWorkflow "Write video"
    SubscribeSubject Prefix
    -> Add(Operand=StringProperty(Value=_.avi))
    -> ExternalizedPropertyOfStringVideoWriter "Video FileName"(MemberName=FileName, Value="E:\6. Myrf 5dpf 12 well plate sound titration\myrf_5dpf_12wellplate_soundtitration_medscrew_10repeats.avi") => #2
    WorkflowInput Source1
    -> Concat => #1
    #1, #2 -> Bonsai.Vision.VideoWriter
      FileName="C:\Users\Axioplan\OneDrive - University College London\Zwp\Behaviour\New Startle Response\Expt9 5dpf ZX1\3hrs_post_darkflash_.avi"
      Suffix=FileCount
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=50
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> WorkflowOutput

Bonsai.IO.SerialStringRead(PortName=COM7, NewLine=\r\n)

Bonsai.ARK.Vision.IMAQ_Camera(cameraName=img0, frameWidth=1280, frameHeight=1024)
-> TimeInterval => #0
-> MemberSelector(Selector=Source.Value)
-> Bonsai.Vision.Grayscale
-> Bonsai.Vision.Crop(RegionOfInterest(X=64, Y=72, Width=1144, Height=858))
-> PublishSubject VideoData
#0 -> NestedWorkflow "Calculate FPS"
    WorkflowInput Source1
    -> MemberSelector(Selector=Source.Interval.TotalMilliseconds)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: 1000/it
    -> Bonsai.Dsp.Buffer(Count=50, Skip=1)
    -> Bonsai.Dsp.Average
    -> WorkflowOutput

Bonsai.Windows.Input.KeyDown(Filter=None)
-> Take(Count=1) => #30
-> Condition F4
    WorkflowInput Source1 => #0
    ExternalizedPropertyOfKeysEqualBuilder Value(MemberName=Value, Value=F4) => #3
    #0, #3 -> Equal(Operand=WorkflowPropertyOfKeys(Value=F4))
    -> WorkflowOutput
-> SelectMany "Frequency titration" => #25
    Bonsai.Scripting.PythonSource "Stimulus script" => #2
      Script:
        NUM_REPEATS=10
        PULSELENGTH=10 #milliseconds
        vol=8

        @returns(str)
        def generate():
          for i in range(NUM_REPEATS):
            for hertz in [100,200,300,400,500]:
               yield "H{}\nS{},{}".format(hertz,vol,PULSELENGTH)
    ExternalizedTimeSpanOfTimer "Inter-trial Interval"(MemberName=Period, Value=PT20S)
    -> Timer(DueTime=PT0S, Period=PT20S) => #3
    #2, #3 -> Zip
    -> MemberSelector(Selector=Source.Item1)
    -> WorkflowOutput
#30 -> Condition F3
    WorkflowInput Source1 => #0
    ExternalizedPropertyOfKeysEqualBuilder Value(MemberName=Value, Value=F3) => #3
    #0, #3 -> Equal(Operand=WorkflowPropertyOfKeys(Value=F3))
    -> WorkflowOutput
-> SelectMany "PPI trials" => #7
    Bonsai.Scripting.PythonSource "Stimulus script" => #2
      Script:
        NUM_REPEATS=30
        PULSELENGTH=10 #milliseconds
        MAXVOL = 8
        MINVOL = 1
        DELAY = 300
        FREQ=200

        @returns(str)
        def generate():
          for i in range(NUM_REPEATS):
            for prepulse in [0,MINVOL]:
               yield "H{}\nS{},{},{},{},{}".format(FREQ,prepulse,PULSELENGTH,DELAY,MAXVOL,PULSELENGTH)
    ExternalizedTimeSpanOfTimer "Inter-trial Interval"(MemberName=Period, Value=PT20S)
    -> Timer(DueTime=PT0S, Period=PT20S) => #3
    #2, #3 -> Zip
    -> MemberSelector(Selector=Source.Item1)
    -> WorkflowOutput
#30 -> Condition F6
    WorkflowInput Source1 => #0
    ExternalizedPropertyOfKeysEqualBuilder Value(MemberName=Value, Value=F6) => #3
    #0, #3 -> Equal(Operand=WorkflowPropertyOfKeys(Value=F6))
    -> WorkflowOutput
-> SelectMany "Light trials" => #8
    Bonsai.Scripting.PythonSource "Stimulus script" => #2
      Script:
        NUM_REPEATS=20
        PULSELENGTH=500 #milliseconds

        @returns(str)
        def generate():
          for i in range(NUM_REPEATS):
            for brightness in [255,0]:
              yield "F{},{}".format(brightness, PULSELENGTH)
    ExternalizedTimeSpanOfTimer "Inter-trial Interval"(MemberName=Period, Value=PT20S)
    -> Timer(DueTime=PT0S, Period=PT20S) => #3
    #2, #3 -> Zip
    -> MemberSelector(Selector=Source.Item1)
    -> WorkflowOutput
#30 -> Condition F2
    WorkflowInput Source1 => #0
    ExternalizedPropertyOfKeysEqualBuilder Value(MemberName=Value, Value=F2) => #3
    #0, #3 -> Equal(Operand=WorkflowPropertyOfKeys(Value=F2))
    -> WorkflowOutput
-> SelectMany "Volume titration" => #9
    Bonsai.Scripting.PythonSource "Stimulus script" => #2
      Script:
        NUM_REPEATS=10
        PULSELENGTH=10 #milliseconds
        FREQ=200

        @returns(str)
        def generate():
          for i in range(NUM_REPEATS):
            for vol in [0,1,4,6,8]:
               yield "H{}\nS{},{}".format(FREQ,vol,PULSELENGTH)
    ExternalizedTimeSpanOfTimer "Inter-trial Interval"(MemberName=Period, Value=PT20S)
    -> Timer(DueTime=PT0S, Period=PT20S) => #3
    #2, #3 -> Zip
    -> MemberSelector(Selector=Source.Item1)
    -> WorkflowOutput
#9, #8, #7, #25 -> Merge
-> PublishSubject "Trigger Signal"
-> WorkflowOutput
